PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = GoFitts
  keyboardBackend = ioHub
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Routines
  Routine init
    TextComponent text
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
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      text:
        This is the instruction scene.

        Work in progress.

        Press Enter to continue.
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        HIGHLIGHT_COLOR = "#CCCCFF"
        NORMAL_COLOR = "#FFFFFF"
        LINE_COLOR = "#6A6A6A"

        target_c = 15

        param_w = [20, 40]
        param_a = [200, 400]

        parameters = []

        for a in param_a:
            for w in param_w:
                parameters.append((a, w))

        shuffle(parameters)
        n_reps = len(parameters)
      Begin Routine:
        mouse.getPos() # this is needed here because of mouse.mouseMoved()

        target_a, target_w = parameters.pop()

        targets = []
        for i in range(target_c):
            x = target_a / 2 * cos(2.0 * pi * (i / target_c))
            y = target_a / 2 * sin(2.0 * pi * (i / target_c))
            target = visual.Circle(win=win,
                                   size=target_w,
                                   pos=(x,y),
                                   fillColor="white",
                                   lineWidth=2,
                                   lineColor=LINE_COLOR)
            targets.append(target)


        current_target = 0
        target_order = []
        start = randint(0, target_c - 1)
        interval = int((target_c + 1) / 2)
        idx = 0
        while idx < target_c:
            target_order.append(start % target_c)
            idx += 1
            if idx < target_c:
                target_order.append((start + interval) % target_c)
                idx += 1
            start += 1
        print(target_order)

        def is_in_target(x, y):
            tx, ty = targets[target_order[current_target]].pos
            return (x - tx) ** 2 + (y - ty) ** 2 <= target_w ** 2
      Each Frame:
        for idx in range(len(targets)):
            target = targets[idx]
            if idx == target_order[current_target]:
                target.fillColor = HIGHLIGHT_COLOR
            else:
                target.fillColor = NORMAL_COLOR
            target.draw()

        if mouse.mouseMoved():
            x, y = mouse.getPos()
            if is_in_target(x, y):
                current_target += 1
                if current_target == target_c:
                    continueRoutine = False
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine waiting
    TextComponent text_2
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
      text = Press Enter to continue
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine init
  LoopInitiator trialLoop loopType="TrialHandler"
    loopType = sequential
    nReps = n_reps
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    Routine waiting
    Routine trial
  LoopTerminator trialLoop
